Patient weight [kg] =		80;
Nucleus =			"H1";
SmartSelect =			"yes";
Coil 1  (exclude) =		"None";
Uniformity =			"CLEAR";
FOV          RL (mm) =		220;
             AP (mm) =		220;
             FH (mm) =		135;
ACQ voxel size   RL (mm) =	3.4375;
             AP (mm) =		3.44000006;
Slice thickness (mm) =		2.4000001;
Recon voxel size RL (mm) =	3.4375;
             AP (mm) =		3.4375;
Fold-over suppression =		"no";
Reconstruction matrix =		64;
SENSE =				"yes";
    P reduction (AP) =		2;
MB SENSE =			"no";
k-t BLAST =			"no";
Stacks =			1;
    type =			"parallel";
    slices =			40;
    slice gap =			"user defined";
          gap (mm) =		1;
    slice orientation =		"transverse";
    fold-over direction =	"AP";
    fat shift direction =	"A";
Stack Offc. AP (P=+mm) =	0;
            RL (L=+mm) =	0;
            FH (H=+mm) =	0;
      Ang.  AP (deg) =		0;
            RL (deg) =		-0;
            FH (deg) =		-0;
      Free rotatable =		"no";
Minimum number of packages =	1;
Slice scan order =		"HF";
Large table movement =		"no";
PlanAlign =			"no";
REST slabs =			0;
Interactive positioning =	"no";
Patient position =		"head first";
Patient body position =		"head first";
Patient orientation =		"supine";
Patient body orientation =	"supine";
Scan type =			"Imaging";
Scan mode =			"MS";
    technique =			"FFE";
Contrast enhancement =		"no";
Acquisition mode =		"cartesian";
Fast Imaging mode =		"EPI";
    shot mode =			"single-shot";
Echoes =			1;
    partial echo =		"no";
    shifted echo =		"no";
TE =				"user defined";
    (ms) =			30;
Flip angle (deg) =		75;
TR =				"user defined";
    (ms) =			2200;
Halfscan =			"no";
Water-fat shift =		"user defined";
     (pixels) =			9;
Shim =				"auto";
mDIXON =			"no";
Fat suppression =		"SPIR";
   strength =			"strong";
   frequency offset =		"default";
Water suppression =		"no";
MTC =				"no";
Research prepulse =		"no";
Diffusion mode =		"no";
Multi-transmit =		"no";
SAR mode =			"high";
B1 mode =			"default";
SAR allow first level =		"yes";
  Patient pregnancy =		"no";
PNS mode =			"high";
Gradient mode =			"default";
SofTone mode =			"no";
Cardiac synchronization =	"no";
Heart rate > 250 bpm =		"no";
Respiratory compensation =	"no";
Navigator respiratory comp =	"no";
Flow compensation =		"no";
Temporal slice spacing =	"equidistant";
fMRI echo stabilisation =	"no";
NSA =				1;
Angio / Contrast enh. =		"no";
Quantitative flow =		"no";
Manual start =			"no";
Dynamic study =			"individual";
    dyn scans =			191;
    dyn scan times =		"shortest";
    fov time mode =		"default";
    dummy scans =		3;
    immediate subtraction =	"no";
    fast next scan =		"no";
    synch. ext. device =	"yes";
        start at dyn. =		1;
        interval (dyn) =	1;
    dyn stabilization =		"regular";
    prospect. motion corr. =	"no";
Keyhole =			"no";
Arterial Spin labeling =	"no";
Preparation phases =		"full";
Interactive F0 =		"no";
B0 field map =			"no";
B1 field map =			"no";
MIP/MPR =			"no";
Images =			"M", (3) "no";
Autoview image =		"M";
Calculated images =		(4) "no";
Reference tissue =		"White matter";
Recon compression =		"No";
Preset window contrast =	"soft";
Reconstruction mode =		"real time";
    reuse memory =		"no";
Save raw data =			"no";
Hardcopy protocol =		"no";
Image filter =			"system default";
Uniformity correction =		"no";
Geometry correction =		"default";
IF_info_seperator =		0;
Total scan duration =		"07:11.1";
Rel. SNR =			1;
Act. TR/TE (ms) =		"2200 / 30";
Dyn. scan time =		"00:02.2";
Time to k0 =			"00:01.1";
ACQ matrix M x P =		"64 x 62";
ACQ voxel MPS (mm) =		"3.44 / 3.55 / 2.40";
REC voxel MPS (mm) =		"3.44 / 3.44 / 2.40";
Scan percentage (%) =		96.875;
Packages =			1;
Min. slice gap (mm) =		-0;
EPI factor =			31;
Act. WFS (pix) / BW (Hz) =	"9.001 / 48.3";
BW in EPI freq. dir. (Hz) =	"2331.0";
Min. WFS (pix) / Max. BW (Hz) =	"7.593 / 57.2";
Min. TR/TE (ms) =		"2081 / 11";
Head SAR =			"<  27 %";
Whole body SAR / level =	"< 0.1 W/kg / normal";
SED =				"  0.0 kJ/kg";
Max B1+rms =			"1.21 uT";
PNS / level =			"66 % / normal";
dB/dt =				"66.6 T/s";
Sound Pressure Level (dB) =	17.3088245;
